20150924_090808 No log in
No user logged in
--{ RES }--
V;200
--{ CFG }--
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1,0;96 Well Microplate;sample1
7,0;96 Well DeepWell;reaction1
7,1;96 Well DeepWell;PCRPlate
13,0;DiTi 200ul LiHa;Labware1
13,1;DiTi 50ul LiHa;Labware4
13,2;DiTi Waste;Labware3
20,0;Trough 100ml;reagents1
20,1;Trough 100ml;reagents2
20,2;Trough 100ml;reagents3
21,0;Trough 100ml;reagents4
21,1;Trough 100ml;waste1
21,2;Trough 100ml;waste2
22,0;Trough 100ml;PCRMixTube
25,0;Wash Station Cleaner shallow
25,1;Wash Station Waste
25,2;Wash Station Cleaner deep
1;System
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--{ RPG }--
Variable(workingFolder,"C:\FastPooling\bins\",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(outputFolder,"C:\FastPooling\Output\",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(simulatePosIDExe,"~workingFolder~SimulatePosID.exe",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(serverExe,"~workingFolder~FastPooling",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(NotifierExe,"~workingFolder~Notifier.exe",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(startGrid,"5",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("10","EndlessLoop");
Execute("~serverExe~",0,"",2);
Execute("~workingFolder~FeedMe.exe Feed",2,"",2);
ImportVariable(gridCount,"~outputFolder~gridsCount.txt",0,"0",0,1,0,1,0);
BeginLoop("gridCount","scanBarcodes");
Comment("retry");
Variable(grid2Scan,"LOOP_scanBarcodes + startGrid",0,"",0,1.000000,10.000000,0,2,0,0);
Group("POSID");
IfThen("grid2Scan",0,"5");
Comment("write POSID scan command for grid 5 here");
Else();
EndIf();
IfThen("grid2Scan",0,"6");
Comment("write POSID scan command for grid 6  here");
Else();
EndIf();
Comment("write all other possible grids' posid command here");
GroupEnd();
Comment("simulate posID's scan work");
Execute("~SimulatePosIDExe~ ~grid2Scan~",2,"",2);
Comment("notify the server scan is finished, read the result");
Execute("~NotifierExe~ ~grid2Scan~",2,"",2);
Comment("wait server's feed back");
Execute("~workingFolder~FeedMe.exe Feed",2,"",2);
Comment("if server say it is ok, scan next grid");
ImportVariable(result,"~outputFolder~\result.txt",1,"False",0,1,0,1,0);
ImportVariable(retryOrIgnore,"~outputFolder~retry.txt",1,"Retry",0,1,0,1,0);
If("result",0,"True","thisGridFinishes");
Comment("if not ok, repeat ");
If("result",0,"False","retry");
Comment("thisGridFinishes");
EndLoop();
Comment("next batch");
Variable(doNextBatch,"False",1,"Next batch?",0,1.000000,10.000000,1,2,1,0);
IfThen("doNextBatch",0,"False");
EndScript(0);
Else();
EndIf();
EndLoop();
